PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1470, 956]
  expName = untitled
  frameRate = 60
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Fixation
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    TextComponent fixation_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine Practicetrials
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    TextComponent digitpres_prac
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits)[practicedigitLoop.thisN]
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  Routine Feedback
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $feedback
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  Routine Blinking
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    TextComponent blinking_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.1
      text = +
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  Routine Officialtrials
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    TextComponent digitpres_off
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits)[officialdigitLoop.thisN]
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  Routine Practicerecall
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    TextComponent prac_digit_1
      letterHeight = 0.05
      pos = (-0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 1
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    TextComponent prac_digit_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 2
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    TextComponent prac_digit_3
      letterHeight = 0.05
      pos = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 3
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    TextComponent prac_digit_4
      letterHeight = 0.05
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 4
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    TextComponent prac_digit_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 5
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    TextComponent prac_digit_6
      letterHeight = 0.05
      pos = (0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 6
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    TextComponent prac_digit_7
      letterHeight = 0.05
      pos = (-0.25, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 7
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    TextComponent prac_digit_8
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 8
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    TextComponent prac_digit_9
      letterHeight = 0.05
      pos = (0.25, -0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      text [set every frame] = 9
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    TextComponent prac_proceed
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Click here to proceed
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    MouseComponent mouse_prac
      clickable = prac_digit_1,prac_digit_2,prac_digit_3,prac_digit_4,prac_digit_5,prac_digit_6,prac_digit_7,prac_digit_8,prac_digit_9,prac_proceed
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_prac
      Code Type = Py
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      Before Experiment:
        from psychopy import core
      Begin Routine:
        clicked_digits = []
        is_pressed = False

        # Dictionary to hold each digit's original size
        original_sizes = {num: num.height for num in [prac_digit_1, prac_digit_2, prac_digit_3, prac_digit_4, prac_digit_5, prac_digit_6, prac_digit_7, prac_digit_8, prac_digit_9]}
        # Dictionary to track the clock for each digit
        click_clocks = {num: core.Clock() for num in [prac_digit_1, prac_digit_2, prac_digit_3, prac_digit_4, prac_digit_5, prac_digit_6, prac_digit_7, prac_digit_8, prac_digit_9]}
      Each Frame:
        # Set the duration for which the digit remains enlarged (in seconds)
        enlarge_duration = 0.2

        if mouse_prac.getPressed()[0]:  # Left mouse button is currently pressed
            if not is_pressed:  # Only proceed if this is a new click (debouncing logic)
                # Check if the "proceed" text was clicked
                if mouse_prac.isPressedIn(prac_proceed):
                    continueRoutine = False  # End the routine
                else:  # Check if a number is clicked
                    for num in [prac_digit_1, prac_digit_2, prac_digit_3, prac_digit_4, prac_digit_5, prac_digit_6, prac_digit_7, prac_digit_8, prac_digit_9]:
                        if mouse_prac.isPressedIn(num):
                            # Enlarge the digit and reset its clock for the enlarge duration
                            num.height = original_sizes[num] * 1.5  # Increase size by 50%
                            click_clocks[num].reset()  # Reset clock to track enlarge duration
                            clicked_digits.append(num.text)  # Store the text of the clicked digit

                            # Store the clicked digit text in the experiment data immediately after clicking
                            thisExp.addData('clicked_digit', num.text)
                            print(f"Clicked digit: {num.text}")  # Print clicked digit for debugging

                # Set is_pressed to True after a click is registered
                is_pressed = True

        else:
            # Reset is_pressed to False when the mouse button is released, enabling new clicks
            is_pressed = False

        # Revert size back to original if the enlarge duration has passed
        for num, clock in click_clocks.items():
            if clock.getTime() > enlarge_duration:  # Check if the enlarge time has passed
                num.height = original_sizes[num]  # Reset to original size

        # At the end of the routine, add the entire list of clicked digits for analysis
        thisExp.addData('all_clicked_digits', ', '.join(clicked_digits))  # Store all clicked digits
        print(f"All clicked digits: {clicked_digits}")  # Print all clicked digits for debugging
      End Routine:
        #Convert corrDig, which contains integers, to a list of strings
        corrDig_str = [str(digit) for digit in corrDig]  # Convert each integer in corrDig to a string

        #To display the correct digits to the participants
        corrDig_disp = ' '.join(map(str, corrDig))  # Convert each number to a string and join with spaces

        if clicked_digits == corrDig_str:
            feedback = "Correct!"
            resp_prac = 1
        else:
            feedback = "Incorrect" #"Incorrect. The correct sequence was " + corrDig_disp
            resp_prac = 0

        thisExp.addData('score', resp_prac)  # Recond wheter correct or incorrect
        print(f'Clicked digits: {clicked_digits}')
        print(f'Correct sequence: {corrDig_str}')
  Routine Officialrecall
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    TextComponent off_digit_1
      letterHeight = 0.05
      pos = (-0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 1
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    TextComponent off_digit_2
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 2
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    TextComponent off_digit_3
      letterHeight = 0.05
      pos = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 3
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    TextComponent off_digit_4
      letterHeight = 0.05
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 4
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    TextComponent off_digit_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 5
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    TextComponent off_digit_6
      letterHeight = 0.05
      pos = (0.25, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 6
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    TextComponent off_digit_7
      letterHeight = 0.05
      pos = (-0.25, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 7
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    TextComponent off_digit_8
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every frame] = 8
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    TextComponent off_digit_9
      letterHeight = 0.05
      pos = (0.25, -0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      text [set every frame] = 9
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    TextComponent off_proceed
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Click here to proceed
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    MouseComponent mouse_off
      clickable = off_digit_1,off_digit_2,off_digit_3,off_digit_4,off_digit_5,off_digit_6,off_digit_7,off_digit_8,off_digit_9,off_proceed
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_off
      Code Type = Both
      Before Experiment:
        from psychopy import core
      Begin Experiment:
        count_incorrect = 0  # To count consecutive incorrect responses
        max_incorrect = 2    # Set the threshold for consecutive incorrect answers
      Begin JS Experiment:
        count_incorrect = 0;
        max_incorrect = 2;
      Begin JS Routine:
        let clicked_digits = [];
        let isPressed = false;

        // Initialize the digits (make sure these are defined correctly)
        let digits = [off_digit_1, off_digit_2, off_digit_3, off_digit_4, off_digit_5, off_digit_6, off_digit_7, off_digit_8, off_digit_9];

        // Dictionary to hold each digit's original size
        let original_sizes = {};
        digits.forEach(num => {
            original_sizes[num] = num.height; // Store original sizes
        });

        // Initialize click_clocks
        let click_clocks = {};
        digits.forEach(num => {
            click_clocks[num] = new util.Clock(); // Correctly initialize clocks
        });
      Begin Routine:
        clicked_digits = []
        is_pressed = False

        # Dictionary to hold each digit's original size
        original_sizes = {num: num.height for num in [off_digit_1, off_digit_2, off_digit_3, off_digit_4, off_digit_5, off_digit_6, off_digit_7, off_digit_8, off_digit_9]}
        # Dictionary to track the clock for each digit
        click_clocks = {num: core.Clock() for num in [off_digit_1, off_digit_2, off_digit_3, off_digit_4, off_digit_5, off_digit_6, off_digit_7, off_digit_8, off_digit_9]}
      Each Frame:
        # Set the duration for which the digit remains enlarged (in seconds)
        enlarge_duration = 0.2

        if mouse_off.getPressed()[0]:  # Left mouse button is currently pressed
            if not is_pressed:  # Only proceed if this is a new click (debouncing logic)
                # Check if the "proceed" text was clicked
                if mouse_off.isPressedIn(off_proceed):
                    continueRoutine = False  # End the routine
                else:  # Check if a number is clicked
                    for num in [off_digit_1, off_digit_2, off_digit_3, off_digit_4, off_digit_5, off_digit_6, off_digit_7, off_digit_8, off_digit_9]:
                        if mouse_off.isPressedIn(num):
                            # Enlarge the digit and reset its clock for the enlarge duration
                            num.height = original_sizes[num] * 1.5  # Increase size by 50%
                            click_clocks[num].reset()  # Reset clock to track enlarge duration
                            clicked_digits.append(num.text)  # Store the text of the clicked digit

                            # Store the clicked digit text in the experiment data immediately after clicking
                            thisExp.addData('clicked_digit', num.text)
                            print(f"Clicked digit: {num.text}")  # Print clicked digit for debugging

                # Set is_pressed to True after a click is registered
                is_pressed = True

        else:
            # Reset is_pressed to False when the mouse button is released, enabling new clicks
            is_pressed = False

        # Revert size back to original if the enlarge duration has passed
        for num, clock in click_clocks.items():
            if clock.getTime() > enlarge_duration:  # Check if the enlarge time has passed
                num.height = original_sizes[num]  # Reset to original size

        # At the end of the routine, add the entire list of clicked digits for analysis
        thisExp.addData('all_clicked_digits', ', '.join(clicked_digits))  # Store all clicked digits
        print(f"All clicked digits: {clicked_digits}")  # Print all clicked digits for debugging
      Each JS Frame:
        // Set the duration for which the digit remains enlarged (in seconds)
        const enlarge_duration = 0.2;

        // This should be in your frame update or routine execution
        if (mouse_off.getPressed()[0]) {  // Left mouse button is currently pressed
            if (!isPressed) {  // Only proceed if this is a new click (debouncing logic)
                // Check if the "proceed" text was clicked
                if (mouse_off.isPressedIn(off_proceed)) {
                    continueRoutine = false;  // End the routine
                } else {  // Check if a number is clicked
                    digits.forEach(num => {
                        if (mouse_off.isPressedIn(num)) {
                            // Enlarge the digit and reset its clock for the enlarge duration
                            num.height = original_sizes[num] * 1.5;  // Increase size by 50%
                            click_clocks[num].reset();  // Reset clock to track enlarge duration
                            clicked_digits.push(num.text);  // Store the text of the clicked digit

                            // Store the clicked digit text in the experiment data immediately after clicking
                            psychoJS.experiment.addData('clicked_digit', num.text);
                            console.log(`Clicked digit: ${num.text}`);  // Print clicked digit for debugging
                        }
                    });

                    // Set isPressed to true after a click is registered
                    isPressed = true;
                }
            }
        } else {
            // Reset isPressed to false when the mouse button is released, enabling new clicks
            isPressed = false;
        }

        // Revert size back to original if the enlarge duration has passed
        for (const [num, clock] of Object.entries(click_clocks)) {
            if (clock.getTime() > enlarge_duration) {  // Check if the enlarge time has passed
                num.height = original_sizes[num];  // Reset to original size
            }
        }

        // At the end of the routine, add the entire list of clicked digits for analysis
        psychoJS.experiment.addData('all_clicked_digits', clicked_digits.join(', '));  // Store all clicked digits
        console.log(`All clicked digits: ${clicked_digits}`);
      End JS Routine:
        corrDig_str = function () {
            var _pj_a = [], _pj_b = corrDig;
            for (var _pj_c = 0, _pj_d = _pj_b.length; (_pj_c < _pj_d); _pj_c += 1) {
                var digit = _pj_b[_pj_c];
                _pj_a.push(digit.toString());
            }
            return _pj_a;
        }
        .call(this);
        corrDig_disp = map(str, corrDig).join(" ");
        if ((clicked_digits === corrDig_str)) {
            count_incorrect = 0;
            feedback = "Correct!";
            resp_off = 1;
        } else {
            count_incorrect += 1;
            feedback = "Incorrect";
            resp_off = 0;
        }
        psychoJS.experiment.addData("score", resp_off);
        console.log(`Clicked digits: ${clicked_digits}`);
        console.log(`Correct sequence: ${corrDig_str}`);
        console.log("Current incorrect count:", count_incorrect);
      End Routine:
        #Convert corrDig, which contains integers, to a list of strings
        corrDig_str = [str(digit) for digit in corrDig]  # Convert each integer in corrDig to a string

        #To display the correct digits to the participants
        corrDig_disp = ' '.join(map(str, corrDig))  # Convert each number to a string and join with spaces

        if clicked_digits == corrDig_str:
            count_incorrect = 0
            feedback = "Correct!"
            resp_off = 1
        else:
            count_incorrect += 1
            feedback = "Incorrect" #"Incorrect. The correct sequence was " + corrDig_disp
            resp_off = 0

        thisExp.addData('score', resp_off)  # Recond wheter correct or incorrect
        print(f'Clicked digits: {clicked_digits}')
        print(f'Correct sequence: {corrDig_str}')
        print("Current incorrect count:", count_incorrect)
  Routine End
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if count_incorrect > max_incorrect:
            continueRoutine = False
            # Stop the loop
            officialdigitBlock.finished = True
  Routine Practicerun
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    TextComponent Introduction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this task you will be required to memorise a sequence of numbers in the exact order that they are presented to you.

        It is very important that you do not physically write down or recite the numbers out loud. Try and memorise the numbers in your head at the best of your ability.


        After all the numbers have been presented, a blinking cross will briefly appear.


        Using the mouse provided to you please click on the numbers that you recall.


        Press 'spacebar' when you are ready to begin.
    KeyboardComponent Spaceresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Officialrun
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    TextComponent Introduction_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Now that you have practiced the task, the official task will begin.

        The number sequences to recall will range from a minimum of 3 numbers.

        It is very important that you do not physically write down or recite the numbers out loud. Try and memorise the numbers in your head at the best of your ability.

        You will be provided feedback along the way.


        Press 'spacebar' when you are ready to begin with some practice trials.

        Good luck!
    KeyboardComponent Spaceresp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Completed
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    TextComponent Finish
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 10
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      text:
        The experiment has now ended.

        Thank you for your participation!
Flow
  Routine Practicerun
  Routine Fixation
  LoopInitiator officialdigitBlock loopType="TrialHandler"
    conditionsFile = digitstims.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpan': 3, 'digits': 849, 'corrDig': [8, 4, 9]},
      {'digitSpan': 3, 'digits': 231, 'corrDig': [2, 3, 1]},
      {'digitSpan': 4, 'digits': 6938, 'corrDig': [6, 9, 3, 8]},
      {'digitSpan': 4, 'digits': 2351, 'corrDig': [2, 3, 5, 1]},
      {'digitSpan': 4, 'digits': 4172, 'corrDig': [4, 1, 7, 2]}]
    LoopInitiator officialdigitLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = digitSpan
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      Routine Officialtrials
    LoopTerminator officialdigitLoop
    LoopInitiator flash_2 loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine Blinking
    LoopTerminator flash_2
    Routine Officialrecall
    Routine Feedback
    Routine End
  LoopTerminator officialdigitBlock
  Routine Completed
